<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Sonovir US - With PhidgetSpatial MARG senso Intel RealSense SR300 - Reslice only" 
      Description="Broadcasting tool tracking data through OpenIGTLink
Keep the device stationary for 2 seconds after connect for accurate gyroscope initialization."
    />
    <Device
      Id="SR300TrackerDevice"
      Type="IntelRealSenseTracker"
      CameraCalibrationFile="IntelRealSenseToolDefinitions/CameraCalibration-CreativeSR300_OECam.xml"
      ToolReferenceFrame="OriSwd"
      TrackingMethod="3D" >
      <DataSources>
        <DataSource Type="Tool" Id="OriSensor" MapFile="IntelRealSenseToolDefinitions/SquaresWithCircle.slam" MarkerImageFile="IntelRealSenseToolDefinitions/SquaresWithCircle.png" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="ProbeOrientationTrackerStream" >
          <DataSource Id="OriSensor"/>
        </OutputChannel>
      </OutputChannels>
    </Device>    
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="ProbeOrientationTrackerStream" />
      </InputChannels>
    </Device> 
    
    
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="ProbeOrientationTrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="OriSensorToOriSwd" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>