<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Sonovir US - With PhidgetSpatial MARG sensor - Reslice only" 
      Description="Broadcasting tool tracking data through OpenIGTLink
Keep the device stationary for 2 seconds after connect for accurate gyroscope initialization."
    />
    <Device
      Id="TrackerDevice"
      Type="PhidgetSpatial"
      AhrsAlgorithm="MADGWICK_MARG"
      AhrsAlgorithmGain="1.5"
      TiltSensorWestAxisIndex="1"
      FilteredTiltSensorAhrsAlgorithm="MADGWICK_IMU"
      FilteredTiltSensorAhrsAlgorithmGain="0.01"
      FilteredTiltSensorWestAxisIndex="1"      
      ToolReferenceFrame="OriSwd" >
      <DataSources>
        <DataSource Type="Tool" Id="OriSensor" PortName="OrientationSensor" />    
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="ProbeOrientationTrackerStream" >
          <DataSource Id="OriSensor"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="ProbeOrientationTrackerStream" />
      </InputChannels>
    </Device> 
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="ProbeOrientationTrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="OriSensorToOriSwd" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>