<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Sonovir US - With Sonovir OE MARG sensor - Reslice only" 
      Description="Collecting orientation data from sonovir created ultrasound device through OpenIGTLink."
    />
    <Device 
      Id="TrackerDevice"
      Type="Sonovir"
      SerialPort="4"
      BaudRate="115200"
      ToolReferenceFrame="OriSwd" >
      <DataSources>
        <DataSource Type="Tool" Id="OriSensor" PortName="OrientationSensor" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="ProbeOrientationTrackerStream">
          <DataSource Id="OriSensor"/>
        </OutputChannel>
      </OutputChannels>
    </Device>    
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="ProbeOrientationTrackerStream" />
      </InputChannels>
    </Device> 
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="ProbeOrientationTrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="OriSensorToOriSwd" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>