<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Sonovir US - With PhidgetSpatial MARG sensor - Simulated image"
      Description="Usage:
* Install 3D Slicer and its SlicerIGT extension (http://www.slicer.org).
* Load the SimulatedUltrasound_Scene.mrb scene file (it is in the configuration directory) into 3D Slicer.
* Change the ProbeToTracker and NeedleToTracker transforms in 3D Slicer to simulate probe and needle movement.

Tool positions are received through OpenIGTLink, simulated images are broadcasted through OpenIGTLink. ProbeToTracker, ReferenceToTracker, NeedleToTracker transforms has to be provided as an input by an OpenIGTLink server.
To use with Ascension tracker instead of a simulated tracker: enable the Ascension3DG device and disable the OpenIGTLinkTracker device. Ports: 1 Probe, 2 Reference, 3 Stylus."
    />
    
    <!--
      For getting transforms from 3D Slicer through OpenIGTLink
      (Slicer requires UseReceivedTimestamps="false", UseLastTransformsOnReceiveTimeout="true")
      ReceiveTimeoutSec="0.150" - Reduce timeout from the default 500ms to make sure transforms are provided frequently enough.
    -->

    <Device
      Id="TrackerDevice"
      Type="OpenIGTLinkTracker"
      MessageType="TRANSFORM"
      ServerAddress="127.0.0.1"
      ServerPort="18946"
      IgtlMessageCrcCheckEnabled="true"
      UseReceivedTimestamps="false"
      ReceiveTimeoutSec="0.150"
      UseLastTransformsOnReceiveTimeout="true"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Ref"
      AcquisitionRate="60" >
      <DataSources>
        <DataSource Type="Tool" Id="OriSwd"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="PositionTrackerStream">
          <DataSource Id="OriSwd" />
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="OrientationDevice"
      Type="PhidgetSpatial"
      AhrsAlgorithm="MADGWICK_MARG"
      AhrsAlgorithmGain="1.5"
      TiltSensorWestAxisIndex="1"
      FilteredTiltSensorAhrsAlgorithm="MADGWICK_IMU"
      FilteredTiltSensorAhrsAlgorithmGain="0.01"
      FilteredTiltSensorWestAxisIndex="1"      
      ToolReferenceFrame="OriSwd" >
      <DataSources>
        <DataSource Type="Tool" Id="OriSensor" PortName="OrientationSensor" />    
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="ProbeOrientationTrackerStream" >
          <DataSource Id="OriSensor"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackerMixer" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="ProbeOrientationTrackerStream" />
        <InputChannel Id="PositionTrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackerStream"/>
      </OutputChannels>
    </Device>
    
    <!-- For getting images from the US simulator -->
    <Device
      Id="VideoDevice"
      Type="UsSimulator"
      LocalTimeOffsetSec="0.0"
      AcquisitionRate="15" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" />  
      </DataSources>      
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>      
      <vtkPlusUsSimulatorAlgo
        ImageCoordinateFrame="Image"
        ReferenceCoordinateFrame="Ref"
        IncomingIntensityMwPerCm2="1000"
        BrightnessConversionGamma="0.2"
        BrighntessConversionOffset="30"
        NumberOfScanlines="128"
        NumberOfSamplesPerScanline="1000"
        NoiseAmplitude="5.0"
        NoiseFrequency="2.5 3.5 1"
        NoisePhase="50 20 0"        
        >
        <SpatialModel
          Name="Air"
          DensityKgPerM3="1.2"
          SoundVelocityMPerSec="343"
          AttenuationCoefficientDbPerCmMhz="100.0"
          BackscatterDiffuseReflectionCoefficient="0.1"
          SurfaceReflectionIntensityDecayDbPerMm="50"
        />
        <SpatialModel
          Name="Body"
          ObjectCoordinateFrame="Ref"
          ModelFile="BodySimple.stl"
          DensityKgPerM3="910"
          SoundVelocityMPerSec="1540"
          AttenuationCoefficientDbPerCmMhz="3.0"
          BackscatterDiffuseReflectionCoefficient="0.1"
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
          TransducerSpatialModelMaxOverlapMm="50"
        />        
        <SpatialModel
          Name="Liver"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_3_liver.stl"
          DensityKgPerM3="1060"
          SoundVelocityMPerSec="1590"
          AttenuationCoefficientDbPerCmMhz="1.0"
          BackscatterDiffuseReflectionCoefficient="0.2"
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="10.0"
        />
        <SpatialModel
          Name="Model_153_left_hepatic_vein"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_153_left_hepatic_vein.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        <SpatialModel
          Name="Model_151_right_hepatic_vein"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_151_right_hepatic_vein.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        <SpatialModel
          Name="Model_25_right_hepatic_artery"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_25_right_hepatic_artery.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        <SpatialModel
          Name="Model_24_left_hepatic_artery"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_24_left_hepatic_artery.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        <SpatialModel
          Name="Model_20_hepatic_artery_proper"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_20_hepatic_artery_proper.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        <SpatialModel
          Name="Model_19_common_hepatic_artery"
          ObjectCoordinateFrame="Ref"
          ModelFile="Model_19_common_hepatic_artery.stl"
          DensityKgPerM3="1800"
          SoundVelocityMPerSec="2000"
          AttenuationCoefficientDbPerCmMhz="0.0001"
          BackscatterDiffuseReflectionCoefficient="0.03"          
          SurfaceSpecularReflectionCoefficient="0.1"
          SurfaceDiffuseReflectionCoefficient="0.0"
        />
        
        <RfProcessing>
          <xScanConversion
            TransducerName="Ultrasonix_L9-4/38"
            TransducerGeometry="LINEAR"
            ImagingDepthMm="60.0"
            TransducerWidthMm="40.0"
            OutputImageSizePixel="400 600"
            TransducerCenterPixel="200 0"
            OutputImageSpacingMmPerPixel="0.1 0.1"/>
          <!-- Example for a curvilinear transducer: -->
          <ScanConversion
            TransducerName="Convex abdominal"
            TransducerGeometry="CURVILINEAR"
            RadiusStartMm="30.0"
            RadiusStopMm="150.0"
            ThetaStartDeg="-45.0"
            ThetaStopDeg="45.0"
            TransducerCenterPixel="500 100"
            OutputImageSizePixel="1000 750"
            OutputImageSpacingMmPerPixel="0.25 0.25" />
        </RfProcessing>
      </vtkPlusUsSimulatorAlgo>

    </Device>
    
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

    <Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Ref">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Ref"
        Interpolation="LINEAR" Optimization="NONE" CompoundingMode="MEAN" FillHoles="ON" NumberOfThreads="2"
        ClipRectangleOrigin="0 0" ClipRectangleSize="1000 750"
        OutputOrigin="60 -10 -15" OutputExtent="0 334 0 396 0 542" OutputSpacing="0.15 0.15 0.15" >
        <HoleFilling>
          <HoleFillingElement
            Type="STICK"     
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
        </HoleFilling>
      </VolumeReconstruction>
    </Device>
    
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="OriSensorToOriSwd" />    
      </TransformNames>
    <ImageNames>
      <Image Name="Image" EmbeddedTransformToFrame="Ref" />
    </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>	
    <Transform From="Transd" To="OriSensor"
      Matrix="
         1 0 0 0
         0 1 0 0
         0 0 1 0
         0 0 0 1" />	
    <Transform From="Image" To="Transd"
      Matrix="
        0.25 0 0 -125 
        0 0.25 0 -15 
        0 0 0.25 0 
        0 0 0 1"
      Error="0.582721" Date="2012.02.06 17:57:00" />  
  </CoordinateDefinitions> 

</PlusConfiguration>
